PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = SEAL_LandmarkPoint
  keyboardBackend = ioHub
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Routines
  Routine Intro
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Welcome to the SEAL Pointing Task
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  Routine instruction
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
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      text:
        In this task you will be shown a picture of the object

        Your job is to point to the object based on your location

        Click on Lower or Upper to start
    TextboxComponent LowerBox
      bold = False
      borderColor = white
      borderWidth = 3
      editable = False
      fillColor = darkgrey
      letterHeight = 0.05
      pos = (-.25, -.35)
      size = .35,.15
      startVal [time (s)] = 0.0
      text = Lower
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    TextboxComponent UpperBox
      bold = False
      borderColor = white
      borderWidth = 3
      editable = False
      fillColor = darkgrey
      letterHeight = 0.05
      pos = (0.25, -.35)
      size = (.35,.15)
      startVal [time (s)] = 0.0
      text = Upper
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    MouseComponent mouse
      clickable = LowerBox,UpperBox
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        if mouse.isPressedIn(UpperBox):
            UpperTrialReps = 1
            LowerTrialReps = 0

        elif mouse.isPressedIn(LowerBox):
            UpperTrialReps = 0
            LowerTrialReps = 1
  Routine end
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Thank you for participating in the SEAL Pointing Task
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  Routine Lowertrial
    ImageComponent image_2
      image [set every repeat] = $imageL
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, .4)
      startVal [time (s)] = 0.0
      text = Please point to the object based on where you are standing
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    ButtonComponent button
      bold = True
      borderColor = white
      borderWidth = 3
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -.35)
      size = (.33,.15)
      startVal [time (s)] = 0
      text = Continue
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  Routine Uppertrial
    ImageComponent image_3
      image [set every repeat] = $imageU
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_5
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Please point to the object based on where you are standing
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    ButtonComponent button_2
      bold = True
      borderColor = white
      borderWidth = 3
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0,-.35)
      size = .33,.15
      startVal [time (s)] = 0
      text = Continue
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  Routine blank
Flow
  Routine Intro
  Routine instruction
  LoopInitiator ShowLower_trials loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = LowerTrialReps
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    LoopInitiator Lowertrials loopType="TrialHandler"
      conditionsFile = PointingStims.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'imageU': 'PointingImages/Landmark12_statue.jpeg', 'imageL': 'PointingImages/Landmark3_waterfountain.jpeg'},
        {'imageU': 'PointingImages/Landmark11_painting.jpeg', 'imageL': 'PointingImages/Landmark6_map.jpeg'},
        {'imageU': 'PointingImages/Landmark7_painting.jpeg', 'imageL': 'PointingImages/Landmark1_book.jpeg'},
        {'imageU': 'PointingImages/Landmark8_painting.jpeg', 'imageL': 'PointingImages/Landmark4_vase.jpeg'},
        {'imageU': 'PointingImages/Landmark9_painting.jpeg', 'imageL': 'PointingImages/Landmark2_painting.jpeg'},
        {'imageU': 'PointingImages/Landmark10_statue.jpeg', 'imageL': 'PointingImages/Landmark5_painting.jpeg'},
        {'imageU': 'PointingImages/Landmark3_waterfountain.jpeg', 'imageL': 'PointingImages/Landmark12_statue.jpeg'},
        {'imageU': 'PointingImages/Landmark6_map.jpeg', 'imageL': 'PointingImages/Landmark11_painting.jpeg'},
        {'imageU': 'PointingImages/Landmark1_book.jpeg', 'imageL': 'PointingImages/Landmark7_painting.jpeg'},
        {'imageU': 'PointingImages/Landmark4_vase.jpeg', 'imageL': 'PointingImages/Landmark8_painting.jpeg'},
        {'imageU': 'PointingImages/Landmark2_painting.jpeg', 'imageL': 'PointingImages/Landmark9_painting.jpeg'},
        {'imageU': 'PointingImages/Landmark5_painting.jpeg', 'imageL': 'PointingImages/Landmark10_statue.jpeg'}]
      Routine Lowertrial
    LoopTerminator Lowertrials
  LoopTerminator ShowLower_trials
  LoopInitiator ShowUpper_trials loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = UpperTrialReps
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    LoopInitiator Uppertrials loopType="TrialHandler"
      conditionsFile = PointingStims.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'imageU': 'PointingImages/Landmark12_statue.jpeg', 'imageL': 'PointingImages/Landmark3_waterfountain.jpeg'},
        {'imageU': 'PointingImages/Landmark11_painting.jpeg', 'imageL': 'PointingImages/Landmark6_map.jpeg'},
        {'imageU': 'PointingImages/Landmark7_painting.jpeg', 'imageL': 'PointingImages/Landmark1_book.jpeg'},
        {'imageU': 'PointingImages/Landmark8_painting.jpeg', 'imageL': 'PointingImages/Landmark4_vase.jpeg'},
        {'imageU': 'PointingImages/Landmark9_painting.jpeg', 'imageL': 'PointingImages/Landmark2_painting.jpeg'},
        {'imageU': 'PointingImages/Landmark10_statue.jpeg', 'imageL': 'PointingImages/Landmark5_painting.jpeg'},
        {'imageU': 'PointingImages/Landmark3_waterfountain.jpeg', 'imageL': 'PointingImages/Landmark12_statue.jpeg'},
        {'imageU': 'PointingImages/Landmark6_map.jpeg', 'imageL': 'PointingImages/Landmark11_painting.jpeg'},
        {'imageU': 'PointingImages/Landmark1_book.jpeg', 'imageL': 'PointingImages/Landmark7_painting.jpeg'},
        {'imageU': 'PointingImages/Landmark4_vase.jpeg', 'imageL': 'PointingImages/Landmark8_painting.jpeg'},
        {'imageU': 'PointingImages/Landmark2_painting.jpeg', 'imageL': 'PointingImages/Landmark9_painting.jpeg'},
        {'imageU': 'PointingImages/Landmark5_painting.jpeg', 'imageL': 'PointingImages/Landmark10_statue.jpeg'}]
      Routine Uppertrial
    LoopTerminator Uppertrials
  LoopTerminator ShowUpper_trials
  Routine end
